# Generated by Configurator on Mon Sep 22 13:19:16 CDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,ThorlabsKinesis,ThorlabsKinesis,ThorlabsKinesis
Device,KBD101_28000001,ThorlabsKinesis,KBD101_28000001
Device,SimHub,SimulatedCamera,SimHub
Device,SimCam,SimulatedCamera,SimCam
Device,SimFocus,SimulatedCamera,SimFocus
Device,SimXY,SimulatedCamera,SimXY

# Pre-init settings for devices
Property,ThorlabsKinesis,EnableSimulatedDevices,Yes
Property,KBD101_28000001,ActuatorPartNumber,CUSTOM
Property,KBD101_28000001,DeviceUnitsPerMillimeter,1.0000
Property,KBD101_28000001,DeviceUnitsPerRevolution,0.3600
Property,KBD101_28000001,MotorGearboxRatio,1.0000
Property,KBD101_28000001,MotorPitch,1.0000
Property,KBD101_28000001,MotorStepsPerRevolution,1.0000
Property,KBD101_28000001,StageType,Rotational

# Pre-init settings for COM ports

# Hub (parent) references
Parent,KBD101_28000001,ThorlabsKinesis
Parent,SimCam,SimHub
Parent,SimFocus,SimHub
Parent,SimXY,SimHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,KBD101_28000001,0
FocusDirection,SimFocus,0

# Roles
Property,Core,Camera,SimCam
Property,Core,Focus,KBD101_28000001
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets

# PixelSize settings

